<Configuration>
    <Server
        maxThreads="20"
        port="1080">
        <Log/>
    </Server>
    <Pipeline name="DICOM De-identification to Local Storage">
        <ArchiveImportService
            acceptFileObjects="no"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            class="org.rsna.ctp.stdstages.ArchiveImportService"
            expandTARs="no"
            fsName="DICOM Image Directory"
            name="ArchiveImportService"
            quarantine="quarantines/ArchiveImportService"
            root="roots/ArchiveImportService"
            treeRoot="ARCHIVE_DIRECTORY"/>
        <DicomDecompressor
            class="org.rsna.ctp.stdstages.DicomDecompressor"
            name="DicomDecompressor"
            quarantine="quarantines/DicomDecompressor"
            root="roots/DicomDecompressor"
            script="scripts/DicomDecompressor.script"/>
        <DicomPixelAnonymizer
            class="org.rsna.ctp.stdstages.DicomPixelAnonymizer"
            name="DicomPixelAnonymizer"
            quarantine="quarantines/DicomPixelAnonymizer"
            root="roots/DicomPixelAnonymizer"
            script="scripts/DicomPixelAnonymizer.script"/>
        <IDMap
            class="org.rsna.ctp.stdstages.IDMap"
            name="IDMap"
            root="roots/IDMap"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="scripts/LookupTable.properties"
            name="DicomAnonymizer"
            quarantine="quarantines/DicomAnonymizer"
            root="roots/DicomAnonymizer"
            script="scripts/DicomAnonymizer.script"/>
        <FileStorageService
            class="org.rsna.ctp.stdstages.FileStorageService"
            name="FileStorageService"
            quarantine="quarantines/FileStorageService"
            returnStoredFile="yes"
            root="OUTPUT_DIRECTORY"
            setWorldReadable="yes"
            setWorldWritable="yes"/>
    </Pipeline>
</Configuration>
